'CR5000  Lower Valle Tower

'Copyright (c) 2002 Campbell Scientific, Inc. All rights reserved.

'1 January 03
'version 1.4 written initially by e swiatek
'modified by Marcy Litvak

' This CR5000 program measures turbulence sensors at 10 or 20 Hz.  The time series can be
'saved to a PC Card.  The CR5000 will also compute on-line turbulent fluxes from the
'measured data.  The flux table saves all the cross products that are required to rotate
'the on-line fluxes into natural wind coordinates in post processing as described in:
'
' Kaimal, J. C. and Finnigan, J. J.: 1994, Atmospheric Boundary Layer Flows, Their
'   Structure and Measurement, Oxford University Press, New York, 289 pages.
'
' Tanner, C. B. and Thurtell, G . W.: 1969, Anemoclinometer measurements of reynolds
'   stress and heat transport in the atmospheric surface layer, Final Report, United
'   States Army Electronics Command, Atmospheric Sciences Laboratory, Fort Huachuca,
'   Arizona.





'The sign convention for the fluxes is positive away from the surface and negative
'toward the surface.
'
' The CR5000 will introduce delays into the CSAT3 and CR5000 Panel Temperature
'data.  These delays match the fixed 302.369 mSec delay that Campbell Scientific
'programs into the LI-7500 of the LI-7500 irga (see page 3-23 of the LI-7500 manual
'published by Li-Cor).  The delays are a function of the Scan Interval and are computed
'automatically by the program.
'
'The site attendant must load in several constants and calibration values.  Search
'for the text string "unique" to find the locations where unique constants and
'calibration values are entered.


'*** Unit Definitions ***

'Units	Units
'C		Celsius
'degrees	degrees (angle)
'g		grams
'J		Joules
'kg		kilograms
'kPa		kilopascals
'm		meters
'mg		milligrams
's		seconds
'W		Watts


'*** Operation ***
'
' Set the constant SCAN_INTERVAL to 100 mSec (10 Hz) or 50 mSec (20 Hz).  The
'appropriate value of the constants CSAT_OPT, ANALOG_DELAY, and CSAT_DELAY will be
'computed by the CR5000.  Connect all the sensors to the CR5000 as described in the
'Wiring section.
'
'Download the program to the CR5000.  When servicing the station, set save_flx_flag_on
'low or set Custom Menu option "Save Fluxes?" to No, note that if save_flx_flag_on ("Save
'Fluxes?") is not set back to high (Yes), no flux data will be saved.


'*** User Control in "Custom" Menu of Program Control Flags ***

'The Custom Menu allows the station operator to conveniently change the status of the
'Program Control Flags using the CR5000 keyboard display.

'Save Fluxes?		Change to "Yes" (default) to start processing flux data.
'save_flx_flag_on	Change to "No" when cleaning webs from CSAT3 or performing other
'				 site maintenance.  This "bad" data will not be included in the on-line fluxes.
'
'Save Time Series?	Change to "Yes" (default) to begin collecting time series on PC Card.
'save_ts_flag_on	Change to "No" to stop collecting time series on the PC Card.


'*** Wiring ***

'SDM INPUT
'SDM-C1	CSAT3 SDM Data (green)
'		LI-7500 SDM Data (gray)
'SDM-C2	CSAT3 SDM Clock (white)
'		LI-7500 SDM Clock (blue)
'SDM-C3	CSAT3 SDM Enable (brown)
'		LI-7500 SDM Enable (brown)
'G		CSAT3 SDM reference (black)
'		CSAT3 SDM shield (clear)
'		LI-7500 SDM reference (black)
'		LI-7500 SDM shield (white)


'EXTERNAL POWER SUPPLY
'POS		CSAT3 power (red)
'		LI-7500 power (red with white)
'		CR5000 (red)
'NEG		CSAT3 power reference (black)
'		CSAT3 power shield (clear)
'		LI-7500 power reference (red with black)
'		LI-7500 ground (green)
'		CR5000 (black)
PipeLineMode
'*** Constants ***

Const ANGLE_FROM_NORTH = 320	'Unique value.
'Compass azimuth of the -x axis.  For the figure
' below, ANGLE_FROM_NORTH = 90.
' () -> Compass coordinate system
' {} -> Right handed coordinate system aligned to magnetic North
'
'
'                                (N)
'                               {-y}
'                                |
'                                |
'                                |
'                                |
'                                |
'                                |
'              (W) {+x} --------[ ]----X---> {-x} (E)
'                              / |      \
'                    CSAT3 Block |      CSAT3 Transducers
'                                |
'                                |
'                                v
'                               {+y}
'                               (S)
'
'The program computes the Compass wind direction, using the constant ANGLE_FROM_NORTH,
'and a CSAT3 wind direction.  Good CSAT3 wind directions are between -90 to 0 and 0 to
'90 degrees (-pi/2 to 0 and 0 to pi/2 radians), i.e. the wind is blowing into the CSAT3
'sensor head.


'Measurement Rate					'10 Hz			20 Hz
Const SCAN_INTERVAL = 100			'100 (mSec)		50 (mSec)

'Output period
Const OUTPUT_INTERVAL = 30			'On-line flux data output interval in minutes.


Const CSAT_OPT = INT (1/SCAN_INTERVAL*1000)		'10 (Hz)			20 (Hz)
Const ANALOG_DELAY = INT (300/SCAN_INTERVAL+1)	'4 (3 scan delay)	7 (6 scan delay)
Const CSAT_DELAY = INT (ANALOG_DELAY-2)			'2 (1 scan delay)	5 (4 scan delay)

'Const Q7_1_POS_CAL = 8.83			'Unique positive multiplier for Q7.1.
'Const Q7_1_NEG_CAL = 10.91		'Unique negative multiplier for Q7.1.
Const CP = 1004.67				'Estimate of heat capacity of air [J/(kg K)].
Const LV = 2440				'Estimate of the latent heat of vaporization [J/g].
Const SDM_PER = 30				'Default SDM clock speed, 30 uSec bit period.
Const RD = 0.28704				'Gas constant for dry air [J/(g K)].
Const RV = 0.0004615			'Gas constant for water vapor [J/(mg K)].
Const R = 8.3143e-3				'Universal gas constant [ (kP m^3) / (K mol) ].

Const A_0 = 6.107800			'Coefficients for the sixth order approximating
Const A_1 = 4.436519e-1			' saturation vapor pressure polynomial (Lowe,
Const A_2 = 1.428946e-2			' Paul R., 1976.:  An approximating polynomial for
Const A_3 = 2.650648e-4			' computation of saturation vapor pressure, J. Appl.
Const A_4 = 3.031240e-6			' Meteor., 16, 100-103).
Const A_5 = 2.034081e-8
Const A_6 = 6.136821e-11

'CNR-2 Constants
'installed briefly when CNR1 was being fixed  11/14/12
'Const CNR2_SW_CAL = 65.96 'Sensitivity = 15.16 uV/W/m^2 (Const = 1000/Sensitivity)
'onst CNR2_LW_CAL = 84.53 'Sensitivity = 11.83 uV/W/m^2 (Const = 1000/Sensitivity)

Const YES = -1					'Yes is defined as True or -1.
Const NO = 0					'No is defined as False or 0.


'Soil heat flux plate constants
Const shf_cal_1=37.6  'SNH063081 - in PVC to right of tower
Const shf_cal_2=32.4'SNH063058 - in PVC to right of tower
Const shf_cal_3=38.0  'SN H063067  under tree/
Const shf_cal_4=63.3 'HFP01sc Hukesflux 00391 not sure where it goes


'Constants for Apogee IR-T  Model SI-1H1, S/N 1166
Const mC2 = 91910.1
Const mC1 = 8771990
Const mC0 = 1695540000
Const bC2 = 3519.44
Const bC1 = 64781.9
Const bC0 = -4448070

 'sn q37139   6.75 ua per 1000 umol m-2 s-1
    '   '1000/6.75*.604
'li190 par sensor facing down (the ground)
Const PAR_li190_Sensitivity		= 6.75     'SN q37139								
Const PAR_mult_Li =  1000/PAR_li190_Sensitivity * 0.604

'Kipp and Zonen = par_up  S/N 80011   cal 5.25 uv/umol
Const PAR_KippZonen=5.25
Const PAR_mult_KZ = 1000/PAR_KippZonen

'*** Variables ***

'CSAT3 variables with additional one or four scan delay, from the Data Table scan_1_4.
Public wind(5)					'Wind, temperature, and diagnostic data from CSAT3.
Alias wind(1) = Ux
Alias wind(2) = Uy
Alias wind(3) = Uz
Alias wind(4) = Ts
Alias wind(5) = diag_csat
Units wind = m/s
Units Ts = C
Units diag_csat = unitless





'LI-7500 has a fixed delay of 302.369 mSec (three scans at 10 Hz or six scans at 20 Hz).
Public irga(6)					'Co2, h2o, pressure, and diagnostic from the LI-7500.
Alias irga(1) = co2
Alias irga(2) = h2o
Alias irga(3) = press
Alias irga(4) = diag_irga
Alias irga(5) = co2_u_mol
Alias irga(6) = h2o_m_mol
Units co2 = mg/m^3
Units h2o = g/m^3
Units press = kPa
Units diag_irga = unitless
Units co2_u_mol = umol/mol
Units h2o_m_mol = mmol/mol

Public diag_bits(9)				'Warning flags.
Alias diag_bits(1) = del_T_f		'Delta temperature warning flag.
Alias diag_bits(2) = track_f		'Tracking (signal lock) warning flag.
Alias diag_bits(3) = amp_h_f		'Amplitude high warning flag.
Alias diag_bits(4) = amp_l_f		'Amplitude low warning flag.
Alias diag_bits(5) = chopper_f	'Chopper warning flag.
Alias diag_bits(6) = detector_f	'Detector warning flag.
Alias diag_bits(7) = pll_f		'PLL warning flag.
Alias diag_bits(8) = sync_f		'Synchronization warning flag.
Alias diag_bits(9) = agc			'Automatic gain control.
Units diag_bits = samples
Units agc = unitless


'Analog variables with three or six scan delay.
Public batt_5000
Units batt_5000 = Volts

Public panelT_5000			'CR5000 panel temperature.
Units panelT_5000 = C

Public watchdog_5000
Units watchdog_5000 = unitless

Public low12V_5000
Units low12V_5000 = unitless

Public panelV
Units panelV = Volts

Public battbank
Units battbank = Volts


Public shf(4)
Alias shf(1)= shf_open_pit1
Alias shf(2)= shf_open_pit2
Alias shf(3)= shf_tree
Alias shf(4)= shf_Hukesflux



'Apogee IR-T S/N 1166 Variables
Public SBTempC
Dim SBTempK
Public TargmV
Dim m
Dim b
Dim TargTempK
Public TargTempC


Public GPS_Time
Public eddyflag


'No delay on meteorological sensors.
Public rho_a				'Density of moist air.
Public rho_d				'Density of dry air.
Public e					'HMP45C vapor pressure.
Public e_sat				'Saturation vapor pressure.
Public h2o_hmp
Public rain

Units rho_a = kg/m^3
Units rho_d = kg/m^3
Units e = kPa
Units e_sat = kPa
Units h2o_hmp = g/m^3


Public NR_lite_Wm2

'4.95 m wind sentry below was listed as just WS_ms
Public WS_ms(2)
Alias WS_ms(1)=WS_ms_4.95
Alias WS_ms(2)=WS_ms_21.65

Public WindDir(2)
Alias WindDir(1)=WindDir_4.95
Alias WindDir(2)=WindDir_21.65
Units NR_lite_Wm2=W/meter2
Units WS_ms=m/s
Units WindDir=Degrees
'12.65 m wind sentry was listed as _2


' 111312. CNR1 Replaced with CNR-2, not sure when CNR1 reinstalled 
Public CM3Up
Public CM3Dn
Public CG3Up
Public CG3Dn
Public CNR1TC
Public CNR1TK
Public NetRs
Public NetRl
Public Albedo
Public UpTot
Public DnTot
Public NetTot
Public CG3UpCo
Public CG3DnCo

'CNR-1 Variables decomissioned 111312. Replaced w/CNR2
'CNR1 was reinstalled in 5/2/2013 but not sure the program was reinstalled to measure CNR1
'fixed in this program 111813
Units CM3Up=W/meter²
Units CM3Dn=W/meter²
Units CG3Up=W/meter²
Units CG3Dn=W/meter²
Units CNR1TC=Deg C
Units CNR1TK=K
Units NetRs=W/meter²
Units NetRl=W/meter²
Units Albedo=W/meter²
Units UpTot=W/meter²
Units DnTot=W/meter²
Units NetTot=W/meter²
Units CG3UpCo=W/meter²
Units CG3DnCo=W/meter²



Public par(2)
Alias par(1)=par_faceup
Alias par(2)= par_facedown
Units par = umolm2s


Dim SWC(12)
Dim T107(12)

Public T107_shf(4)
Alias T107_shf(1)=T_shf_open_east_2cm
Alias T107_shf(2)=T_shf_open_east_6cm
Alias T107_shf(3)=T_shf_open_west_6cm
Alias T107_shf(4)=T_shf_open_west_2cm



Dim Soil_CO2(12)
Alias Soil_CO2(1)=Soil_CO2_P1_5
Alias Soil_CO2(2)=Soil_CO2_P1_10
Alias Soil_CO2(3)=Soil_CO2_P1_30
Alias Soil_CO2(4)=Soil_CO2_P1_60
Alias Soil_CO2(5)=Soil_CO2_P2_5
Alias Soil_CO2(6)=Soil_CO2_P2_10
Alias Soil_CO2(7)=Soil_CO2_P2_30
Alias Soil_CO2(8)=Soil_CO2_P2_60
Alias Soil_CO2(9)=Soil_CO2_P3_5
Alias Soil_CO2(10)=Soil_CO2_P3_10
Alias Soil_CO2(11)=Soil_CO2_P3_30
Alias Soil_CO2(12)=Soil_CO2_P3_60



Public TCAV
Alias TCAV=T_shf_tree


'changed program 12/27/13 to be identical to MCon, so have 5 heights.   
' 
'exisiting 2 are in AirTC(2) and RH(2) at 4.95m and
' AirTC(5) and RH(5) is at 21.65 m until we can raise it to 24 m like on MCon
Public AirTC(5)
Alias AirTC(1)=AirTC_1.5
Alias AirTC(2)=AirTC_4.5
Alias AirTC(3)=AirTC_8.75
Alias AirTC(4)=AirTC_16
Alias AirTC(5)=AirTC_24

Public RH(5)
Alias RH(1)=RH_1.5
Alias RH(2)=RH_4.5
Alias RH(3)=RH_8.75
Alias RH(4)=RH_16
Alias RH(5)=RH_24


Dim PTemp_C
Dim PressON
Units T107=Deg C
Units AirTC=Deg C
Units RH=%
Units PTemp_C=Deg C
Dim i


Public RTD_temp

'Flux variables.
Dim Fc_wpl				'Co2 flux, with Webb et al. term.
Dim LE_wpl				'Latent heat flux, with Webb et al. term.
Dim Hs					'Sensible heat flux using sonic temperature.
Dim tau					'Momentum flux.
Dim u_star				'Friction velocity.
Dim Fc_irga				'Co2 flux, raw.
Dim LE_irga				'Latent heat flux, raw.
Dim co2_wpl_LE				'Co2 flux, Webb et al. term do to latent heat flux.
Dim co2_wpl_H				'Co2 flux, Webb et al. term do to sensible heat flux.
Dim h2o_wpl_LE				'Latent heat flux, Webb et al. term do to latent heat flux.
Dim h2o_wpl_H				'Latent heat flux, Webb et al. term do to sensible heat flux.
Dim cov_out(49)			'Covariances of wind and scalars, wind vector, and mean rho_a, rho_d, t_hmp, co2, and h2o.
Units Fc_wpl = umolm^2s
Units LE_wpl = W/m^2
Units Hs = W/m^2
Units tau = kg/(m s^2)
Units u_star = m/s
Units Fc_irga = mg/(m^2 s)
Units LE_irga = W/m^2
Units co2_wpl_LE = mg/(m^2 s)
Units co2_wpl_H = mg/(m^2 s)
Units h2o_wpl_LE = W/m^2
Units h2o_wpl_H = W/m^2


'Aliases for covariances.
Alias cov_out(1) = cov_Uz_Uz
Alias cov_out(2) = cov_Uz_Ux
Alias cov_out(3) = cov_Uz_Uy
Alias cov_out(4) = cov_Uz_co2
Alias cov_out(5) = cov_Uz_h2o
Alias cov_out(7) = cov_Uz_Ts
Alias cov_out(9) = cov_Ux_Ux
Alias cov_out(10) = cov_Ux_Uy
Alias cov_out(11) = cov_Ux_co2
Alias cov_out(12) = cov_Ux_h2o
Alias cov_out(14) = cov_Ux_Ts
Alias cov_out(16) = cov_Uy_Uy
Alias cov_out(17) = cov_Uy_co2
Alias cov_out(18) = cov_Uy_h2o
Alias cov_out(20) = cov_Uy_Ts
Alias cov_out(22) = cov_co2_co2
Alias cov_out(27) = cov_h2o_h2o
Alias cov_out(34) = cov_Ts_Ts
Units cov_Uz_Uz = (m/s)^2
Units cov_Uz_Ux = (m/s)^2
Units cov_Uz_Uy = (m/s)^2
Units cov_Uz_co2 = mg/(m^2 s)
Units cov_Uz_h2o = g/(m^2 s)
Units cov_Uz_Ts = m C/s
Units cov_Ux_Ux = (m/s)^2
Units cov_Ux_Uy = (m/s)^2
Units cov_Ux_co2 = mg/(m^2 s)
Units cov_Ux_h2o = g/(m^2 s)
Units cov_Ux_Ts = m C/s
Units cov_Uy_Uy = (m/s)^2
Units cov_Uy_co2 = mg/(m^2 s)
Units cov_Uy_h2o = g/(m^2 s)
Units cov_Uy_Ts = m C/s
Units cov_co2_co2 = (mg/m^3)^2
Units cov_h2o_h2o = (g/m^3)^2
Units cov_Ts_Ts = C^2


'Wind directions and speed.
Alias cov_out(39) = wnd_dir_compass
Alias cov_out(41) = wnd_spd
Alias cov_out(42) = rslt_wnd_spd
Alias cov_out(43) = wnd_dir_csat3
Alias cov_out(44) = std_wnd_dir
Alias cov_out(45) = rho_a_mean
Alias cov_out(46) = rho_d_mean
Alias cov_out(47) = t_hmp_mean
Alias cov_out(48) = co2_mean
Alias cov_out(49) = h2o_mean
Units wnd_dir_compass = degrees
Units wnd_spd = m/s
Units rslt_wnd_spd = m/s
Units wnd_dir_csat3 = degrees
Units std_wnd_dir = degrees


'Diagnostic variables.
Dim disable_flag_on(4)		'Intermediate processing disable.
'disable_flag_on(1)		'Set high when CSAT3 diagnostic warning flags are on or CSAT3 has no data.
'disable_flag_on(2)		'Set high when LI-7500 diagnostic warning flags are on or LI-7500 failed to send data.
'disable_flag_on(3)		'Set high when CSAT3 diagnostic warning flags are on.
' Used to filter the sum of CSAT3 diagnostic warning flags.
'disable_flag_on(4)		'Set high when LI-7500 diagnostic warning flags are on.
' Used to filter the sum of LI-500 diagnostic warning flags.
Dim n					'Number of samples in the on-line covariances.
Units n = samples


'Program Control flags.
Public save_flx_flag_on
Public save_ts_flag_on


'Measurement variables without delays.
Dim wind_in(5)				'CSAT3 data, before adding delay.
Dim panelT_5000_in			'Panel temperature, before adding delay.


'Arrays to store delayed data.
Dim analog_data(3)			'Three or six scan old data from the Data Table scan_3_6.
Dim csat_data(5)			'One or four scan old data from the Data Table scan_1_4.


'Working variables.
Dim cov_in(8)				'Array used in the covariance instruction.
Dim co2_mm_m3				'Carbon dioxide concentration [mmol/m^3], used to compute umol/mol concentration.
Dim h2o_mm_m3				'Water vapor concentration [mmol/m^3], used to compute vapor pressure and mmol/mol concentration.
Dim t_hmp_K				'HMP45C temperature in Kelvin.
Dim sigma_wpl				'Webb et al. sigma = density of water / density of dry air.
Dim j					'Counter variable.
Dim scan_count				'Counts the number scans that have been executed.
Dim wind_east				'Uy wind in compass coordinate system.
Dim wind_north				'Ux wind in compass coordinate system.
Dim even_min_flag_on		'Used to synchronize the time series output to the even minute.


'User variables.
Public flag(8)
Alias flag(4) = Start_up
Alias flag(3) = Temp_alert
Alias flag(2) = Yellow_alert
Alias flag(1) = Red_alert
Alias flag(5) = ProfCal_flag
Alias flag(6) = EddyCal_flag
Public counter
Public radio_on As Boolean  'Set high to activate C3 for radio
'*** Final Output Data Tables ***

'This table will hold fourteen days of flux data on the CPU or twenty-eight days on the
'PC Card of flux data.  This data is output every OUTPUT_INTERVAL minutes.
DataTable (flux,TRUE,1440)
  DataInterval (0,OUTPUT_INTERVAL,Min,10)
  CardOut (0,2880)
  Sample (1,GPS_Time,IEEE4)
  Sample (1,Fc_wpl,IEEE4)
  Sample (1,LE_wpl,IEEE4)
  Sample (1,Hs,IEEE4)
  Sample (1,tau,IEEE4)
  Sample (1,u_star,IEEE4)
  Totalize (1,n,IEEE4,disable_flag_on(1) OR disable_flag_on(2) OR NOT (save_flx_flag_on))
 
  Sample (5,cov_out(1),IEEE4)
  Sample (1,cov_out(7),IEEE4)
  Sample (4,cov_out(9),IEEE4)
  Sample (1,cov_out(14),IEEE4)
  Sample (3,cov_out(16),IEEE4)
  Sample (1,cov_out(20),IEEE4)
  Sample (1,cov_out(22),IEEE4)
  Sample (1,cov_out(27),IEEE4)
  Sample (1,cov_out(34),IEEE4)

  Average (3,Ux,IEEE4,(disable_flag_on(1) OR NOT (save_flx_flag_on))
  Average (1,Ts,IEEE4,(disable_flag_on(1) OR NOT (save_flx_flag_on))
  Average (2,co2,IEEE4,(disable_flag_on(2) OR NOT (save_flx_flag_on))
  Average (1,co2_u_mol,IEEE4,(disable_flag_on(2) OR NOT (save_flx_flag_on))
  Average (1,h2o_m_mol,IEEE4,(disable_flag_on(2) OR NOT (save_flx_flag_on))
  Average (1,rho_a,IEEE4,disable_flag_on(2) OR NOT (save_flx_flag_on))
  Average (1,press,IEEE4,disable_flag_on(2) OR NOT (save_flx_flag_on))

  Sample (1,wnd_dir_compass,IEEE4)
  Sample (1,wnd_dir_csat3,IEEE4)
  Sample (1,wnd_spd,IEEE4)
  Sample (1,rslt_wnd_spd,IEEE4)
  Sample (1,std_wnd_dir,IEEE4)
  WindVector (1,WS_ms(1),WindDir(1),IEEE4,False,0,0,0)
  WindVector (1,WS_ms(2),WindDir(2),IEEE4,False,0,0,0)
  

  Average (1,panelT_5000,IEEE4,FALSE)
  Average (1,batt_5000,IEEE4,FALSE)
  Average (1,battbank,IEEE4,FALSE)
  Average (1,panelV,IEEE4,FALSE)
  Totalize (1,low12V_5000,IEEE4,FALSE)
  Totalize (1,watchdog_5000,IEEE4,FALSE)
 
  Totalize (1,n,IEEE4,NOT (disable_flag_on(1) XOR disable_flag_on(3)) OR NOT (save_flx_flag_on)
  FieldNames ("csat_warnings")
  Totalize (4,del_T_f,IEEE4,disable_flag_on(3) OR NOT (save_flx_flag_on))
  Totalize (1,n,IEEE4,NOT (disable_flag_on(2) XOR disable_flag_on(4)) OR NOT (save_flx_flag_on)
  FieldNames ("irga_warnings")
  Totalize (4,chopper_f,IEEE4,disable_flag_on(4) OR NOT (save_flx_flag_on))
  Average  (1,agc,IEEE4,disable_flag_on(2) OR NOT (save_flx_flag_on))
 
 
  Average(1,CM3Up,IEEE4,False)
  FieldNames("Rad_short_Up_Avg")
  Average(1,CM3Dn,IEEE4,False)
  FieldNames("Rad_short_Dn_Avg")
  Average(1,CG3Up,IEEE4,False)
  FieldNames("Rad_long_Up__Avg")
  Average(1,CG3Dn,IEEE4,False)
  FieldNames("Rad_long_Dn__Avg")
  Average(1,CG3UpCo,IEEE4,FALSE)
  Average(1,CG3DnCo,IEEE4,FALSE)
  Average(1,NetTot,IEEE4,False)
  Average(1,NetRs,IEEE4,False)
  Average(1,NetRl,IEEE4,False)
  Average(1,CNR1TC,IEEE4,False)
  Average(1,NR_lite_Wm2,IEEE4,False)
  Average (2,par(1),IEEE4,FALSE)
  
  Average(5,AirTC(1),IEEE4,False)
  Average(5,RH(1),IEEE4,False)
  Average (1,RTD_temp,IEEE4,False)
  Average (1,TargmV,FP2,False)
  Average (1,SBTempC,FP2,False)
  Average (1,TargTempC,FP2,False)
  
  Totalize (1,rain,IEEE4,FALSE)
  Average (1,e,IEEE4,FALSE)
  Average (1,e_sat,IEEE4,FALSE)
  Average (1,h2o_hmp,IEEE4,FALSE)
   
  Average (12,SWC(1),IEEE4,FALSE)
  Average (12,T107(1),IEEE4,FALSE)
  Average (12,Soil_CO2(1),IEEE4,FALSE)
  Average (4,shf(1),IEEE4,FALSE)
  Average (4,T107_shf(1),IEEE4,False)
  Average (1,TCAV,IEEE4,FALSE)

EndTable


'Set save_ts_flag_on high or set "Save Time Series?" custom menu option to Yes
'to save time series data.
DataTable (ts_data,even_min_flag_on,-1)
  DataInterval (0,SCAN_INTERVAL,mSec,100)
  CardOut (0,-1)
  Sample (3,Ux,IEEE4)
  Sample (2,co2,IEEE4)
  Sample (1,Ts,IEEE4)
  Sample (1,press,IEEE4)
  Sample (1,diag_csat,IEEE4)
  Sample (1,diag_irga,IEEE4)

EndTable


'*** Working Data Tables ***

'Delay the analog measurements by three or six scans.
DataTable (scan_3_6,TRUE,ANALOG_DELAY)

  Sample (1,panelT_5000_in,IEEE4)

EndTable


'Delay the CSAT3 measurements by one or four scans.
DataTable (scan_1_4,TRUE,CSAT_DELAY)

  Sample (5,wind_in(1),IEEE4)

EndTable


'Compute the covariances of vertical wind, co2, h2o, and sonic temperature, as well as
'the other cross products, required to rotate the data into natural wind coordinates.
'This data is output every OUTPUT_INTERVAL minutes.
DataTable (comp_cov,TRUE,1)
  DataInterval (0,OUTPUT_INTERVAL,min,1)

  Covariance (8,cov_in(1),IEEE4,(disable_flag_on(1) OR disable_flag_on(2) OR NOT (save_flx_flag_on)),36)
  WindVector (1,wind_east,wind_north,IEEE4,(disable_flag_on(1) OR NOT (save_flx_flag_on)),0,1,2)
  WindVector (1,Uy,Ux,IEEE4,(disable_flag_on(1) OR NOT (save_flx_flag_on)),0,1,2)
  Average (1,rho_a,IEEE4,disable_flag_on(2))
  Average (1,rho_d,IEEE4,disable_flag_on(2))
  Average (1,AirTC(5),IEEE4,FALSE)
  Average (1,co2,IEEE4,disable_flag_on(2))
  Average (1,h2o_hmp,IEEE4,FALSE)

EndTable



'*** Define Custom Menus ***

DisplayMenu ("Program Control",TRUE)

  MenuItem ("Save Fluxes?",save_flx_flag_on)
  MenuPick (YES,NO)

  MenuItem ("Save Time Series?",save_ts_flag_on)
  MenuPick (YES,NO)

EndMenu



'*** Program ***

BeginProg

  n = 1

  'Save fluxes on compile.
  save_flx_flag_on = TRUE

  'Save the time series on compile.
  save_ts_flag_on = TRUE

  'Set all CSAT3 variables to NaN.
  Move (wind_in(1),5,NaN,1)

  'Set all LI-7500 variables to NaN.
  Move (irga(1),4,NaN,1)

  'Set the SDM clock speed.
  SDMSpeed (SDM_PER)

  flag(1)=false
  flag(2)=false
  flag(3)=false
  flag(4)=true
  flag(5) = false
  flag(6)= false

  Scan (SCAN_INTERVAL,mSec,10,0)

    'CR5000 panel temperature.
    PanelTemp (panelT_5000_in,250)


    'Get CSAT3 wind and sonic temperature data.
    CSAT3 (wind_in(1),1,3,91,CSAT_OPT)


    'Get LI-7500 data.
    CS7500 (irga(1),1,6,6)

    'Save the molar density to compute molar concentration.
    co2_mm_m3 = co2
    h2o_mm_m3 = h2o

    'Convert LI-7500 data from molar density [mmol/m^3] to mass density.
    ' 44 [g/mol] - molecular weight of carbon dioxide
    ' 0.018 [g/mmol] - molecular weight of water vapor
    If ( NOT (co2 = -99999) ) Then ( co2 = co2*44 )
    h2o = h2o*0.018


    PulseCount(WS_ms(1),1,1,1,1,0.75,0.2)
    If WS_ms(1)<0.21 Then WS_ms(1)=0
   ' If WS_ms(2)<0.21 Then WS_ms(2)=0
    BrHalf(WindDir(1),1,mV5000,36,Vx1,1,5000,True,0,250,355,0)
    If WindDir(1)>=360 Then WindDir(1)=0
   ' If WindDir(1)<0 Then WindDir(1)=0
   '	If WindDir(2)>=360 Then WindDir(2)=0
   'If WindDir(2)<0 Then WindDir(2)=0


 


    'CNR1 Net Radiometer measurements CM3Up, CM3Dn, CG3Up, CG3Dn, CNR1TC, CNR1TK,
    '	NetRs, NetRl, Albedo, UpTot, DnTot, NetTot, CG3UpCo, and CG3DnCo:
    ' CNR-1 measurements decomissioned 111312. CNR-1 replaced with CNR-2 111412;  Switched
    'back 5/2/2013 
    VoltDiff(CM3Up,1,mV20,3,True,0,250,163.666,0)
    VoltDiff(CM3Dn,1,mV20,4,True,0,250,163.666,0)
    VoltDiff(CG3Up,1,mV20,5,True,0,250,163.666,0)
    VoltDiff(CG3Dn,1,mV20,6,True,0,250,163.666,0)
    Resistance (CNR1TC,1,mV200,7,Ix1,1,1675,TRUE,TRUE,200,250,1,0)
    CNR1TC = CNR1TC/100

    PRT(CNR1TC,1,CNR1TC,1,0)
    CNR1TK=CNR1TC+273.18
    NetRs=CM3Up-CM3Dn
    NetRl=CG3Up-CG3Dn
    Albedo=CM3Dn/CM3Up
    UpTot=CM3Up+CG3Up
    DnTot=CM3Dn+CG3Dn
    NetTot=UpTot-DnTot
    CG3UpCo=CG3Up+5.67*10^-8*CNR1TK^4
    CG3DnCo=CG3Dn+5.67*10^-8*CNR1TK^4
    ''CNR-2 Measurement (added 111312)   took out 50213, changed program 111813
    '     VoltDiff (NetRs,1,mV20,3,True,200,250,CNR2_SW_CAL,0)
    '     VoltDiff (NetRl,1,mV20,4,True,0,250,CNR2_LW_CAL,0)
    '     NetTot = NetRs + NetRl
 
    VoltDiff (par(1),1,mV20,17,TRUE,450,450,PAR_mult_KZ,0)
    VoltDiff (par(2),1,mV200,10,TRUE,450,450,PAR_mult_Li,0)
   

    'HMP45C (6-wire) Temperature & Relative Humidity Sensor measurements AirTC and RH:
    'was regular AirTC and RH before 11/18/13  This is at 4.95
    VoltDiff (AirTC(2),1,mV5000,13,True,0,250,.1,-40.0)
    VoltDiff (RH(2),1,mV1000,14,True,0,250,0.001,0)
    If RH(2)>1 AND RH(2)<1.08 Then RH(2)=1.00

    ' PROGRAM CHANGE HERE FOR ANDY   7/8/08
    'was AirTC_2 and RH_2 before 11/18/13
    'HMP45C (6-wire) Temperature & Relative Humidity Sensor measurements AirTC_2 and RH_2:
    'This is at 21.65
    VoltDiff (AirTC(5),1,mV5000,15,True,200,250,.1,-40.0)
    VoltDiff (RH(5),1,mV1000,16,True,200,250,0.001,0)
    If RH(5)>1.00 AND RH(5)<1.08 Then RH(5)=1.00
  
     Resistance (RTD_temp,1,mV200,20,Ix2,1,180,True,True,200,250,0.001,0)
     PRT (RTD_temp,1,RTD_temp,1.0,0)



    'Find the HMP45C vapor pressure, in kPa, using a sixth order polynomial (Lowe, 1976).
    e_sat = 0.1*(A_0+AirTC(5)*(A_1+AirTC(5)*(A_2+AirTC(5)*(A_3+AirTC(5)*(A_4+AirTC(5)*(A_5+AirTC(5)*A_6))))))
    e = e_sat*RH(5)

    'Compute the HMP45C vapor density.
    h2o_hmp = e/((AirTC(5) + 273.15)*RV)

    'Compute dry and moist air density.
    rho_d = (press-e)/((AirTC(5) + 273.15)*RD)
    rho_a = rho_d+(h2o_hmp/1000)


 'Measure charge of solar panels and battery bank
     VoltDiff (battbank,1,mV5000,1,1,0,450,.01,0)
     VoltDiff (panelV,1,mV5000,2,1,0,250,.01,0)

    'Measure Apogee IR-T

    'Instruction to measure sensor body temperature (green wire to SE25, white wire to VX1, blue wire to VX ground)
    Therm109 (SBTempC,1,35,Vx3,0,250,1.0,0)

    'Instruction to measure mV output of thermopile detector (red wire to 14H, black wire to 14L, clear wire to 14 ground)
    VoltDiff (TargmV,1,mV20,19,True ,0,250,1.0,0)

    'Calculation of m (slope) and b (intercept) coefficients for target temperature calculation
    m = mC2 * SBTempC^2 + mC1 * SBTempC + mC0
    b = bC2 * SBTempC^2 + bC1 * SBTempC + bC0

    'Calculation of target temperature
    SBTempK = SBTempC + 273.15
    TargTempK = ((SBTempK^4) + m * TargmV + b)^0.25
    TargTempC = TargTempK - 273.15

   
   
    '107 Temperature Probe measurement T107_C 1-4:
    BrHalf(T107_shf(1),4,mV20,21,4,4,4000,True,0,250,800,0)
    For i = 1 To 4
      T107_shf(i)=-53.4601+(90.807*T107_shf(i))+(-83.257*T107_shf(i)^2)+(52.283*T107_shf(i)^3)+(-16.723*T107_shf(i)^4)+(2.211*T107_shf(i)^5)
    Next

  
    TCDiff (TCAV,1,mV20C,9,TypeE,panelT_5000_in,TRUE,200,250,1,0)
    

    'Measure rain gauge
    PulseCount (rain,1,2,2,0,.254,0)

    'Get the battery voltage, and other variables from the Status Table.
    Battery (batt_5000)
    low12V_5000= Status.Low12VCount(1,1)
    watchdog_5000 = Status.WatchdogErrors(1,1)


    If ( IfTime (540,1440,Min) ) Then ( radio_on = TRUE )
    If ( IfTime (900,1440,Min) ) Then ( radio_on = FALSE )
    PortSet (4,radio_on)

    'Delay the analog measurements by three or six scans.
    CallTable scan_3_6

    'Delay the CSAT3 measurements by one or four scans.
    CallTable scan_1_4


    If ( scan_count >= ANALOG_DELAY ) Then

      'Load in analog measurements that have been delayed by three or six scans.
      GetRecord (analog_data(1),scan_3_6,ANALOG_DELAY)
      panelT_5000 = analog_data(1)


      'Load in CSAT3 measurements that have been delayed by one or four scans.
      GetRecord (Ux,scan_1_4,CSAT_DELAY)
      wind_east = -1*Uy
      wind_north = Ux



      'Define 61502 in the diagnostic word as NaN.
      If ( diag_csat = NaN ) Then ( diag_csat = 61502 )

      'Break up the four CSAT3 warning flags into four separate bits.
      del_T_f = (diag_csat AND &h8000)/&h8000
      track_f = (diag_csat AND &h4000)/&h4000
      amp_h_f = (diag_csat AND &h2000)/&h2000
      amp_l_f = (diag_csat AND &h1000)/&h1000

      'Turn on the intermediate processing disable flag when any CSAT3 warning flag is high, including the
      'special cases NaN (61502), a Lost Trigger (61440), No Data (61503), an SDM error (61441), or wrong CSAT3
      'embedded code (61442).
      If ( diag_csat AND &hf000 ) Then
        disable_flag_on(1) = TRUE

      Else
        disable_flag_on(1) = FALSE

      EndIf

      'Totalize the CSAT3 diagnostic warning flags only.  Turn on the intermediate processing disable flag during
      'the CSAT3 special cases NaN (61502), a Lost Trigger (61440), No Data (61503), an SDM error (61441),
      'or wrong CSAT3 embedded code (61442).
      If ( (diag_csat AND &hf000) = &hf000 ) Then
        disable_flag_on(3) = TRUE

      Else
        disable_flag_on(3) = FALSE

      EndIf

      'Save only the four most significant bits of the CSAT3 diagnostics, except for the special cases
      'NaN (61502), a Lost Trigger (61440), No Data (61503), an SDM error (61441), or wrong CSAT3
      'embedded code (61442).
      If ( diag_csat < &hf000 ) Then ( diag_csat = INT ((diag_csat AND &hf000)/&h1000) )

      'Swap the LI-7500 diagnostic bit state.
      diag_irga = diag_irga XOR &h00f0

      'Turn on the intermediate processing disable flag when the LI-7500 has failed to send data to the
      'CR5000 via SDM.
      If ( (co2 < -99990) OR (co2 = NaN) ) Then (diag_irga = &h00ff)		'Set all flags high and rail the AGC to 94.

      'Compute the AGC.
      agc = INT ((diag_irga AND &h000f) * 6.25 + 0.5)

      'Break up the four LI-7500 warning flags into four separate bits and swap bit state.
      chopper_f = (diag_irga AND &h0080)/&h0080
      detector_f = (diag_irga AND &h0040)/&h0040
      pll_f = (diag_irga AND &h0020)/&h0020
      sync_f = (diag_irga AND &h0010)/&h0010

      'Turn on the intermediate processing disable flag when any LI-7500 warning flag is high, including the
      'special cases NaN or an SDM error.
      If ( diag_irga AND &h00f0 ) Then
        disable_flag_on(2) = TRUE

      Else
        disable_flag_on(2) = FALSE

      EndIf

      'Totalize the LI-7500 diagnostic warning flags only.  Turn on the intermediate processing disable flag during
      ' the LI-7500 special cases NaN (255) or SDM error (255).
      If ( (diag_irga AND &h00ff) = &h00ff ) Then
        disable_flag_on(4) = TRUE

      Else
        disable_flag_on(4) = FALSE

      EndIf

      'Save only the four most significant bits of the LI-7500 diagnostic word.
      diag_irga = INT ((diag_irga AND &h00f0)/&h0010)


      'Compute the molar concentration of co2 and h2o.
      t_hmp_K = AirTC(2)+273.15
      co2_u_mol = co2_mm_m3*R*t_hmp_K/press*1000
      h2o_m_mol = h2o_mm_m3*R*t_hmp_K/press

      'Write a file mark to the time series table every twenty-four hours with a five hour offset.
      'The filemark is written only to the PC Card if time series data are being stored.
      If ( even_min_flag_on AND IfTime (0,1440,Min) ) Then
        ( FileMark (ts_data) )
        ( FileMark (flux) )
      EndIf

      'Start saving the time series data on a even minute boundary.
      If ( save_ts_flag_on ) Then
        If ( IfTime (0,1,Min) ) Then ( even_min_flag_on = TRUE )

      Else
        even_min_flag_on = FALSE

      EndIf

      If (flag(6)=TRUE) Then eddyflag=1

      CallTable ts_data

      'Load cov_in() array for the covariance computation.
      cov_in(1) = Uz
      cov_in(2) = Ux
      cov_in(3) = Uy
      cov_in(4) = co2
      cov_in(5) = h2o
      cov_in(7) = Ts

      CallTable comp_cov


      If ( comp_cov.Output(1,1) ) Then

        GetRecord (cov_out(1),comp_cov,1)

        'The compass wind direction will be between 0 and 360 degrees.
        wnd_dir_compass = (wnd_dir_compass+ANGLE_FROM_NORTH)
        If ( wnd_dir_compass ) < 0 Then ( wnd_dir_compass = wnd_dir_compass+360 )
        wnd_dir_compass = wnd_dir_compass MOD 360

        'The CSAT3 wind direction will be between 0 to 180 degrees and 0 to -180 degrees.
        If ( wnd_dir_csat3 ) > 180 Then ( wnd_dir_csat3 = wnd_dir_csat3-360 )

        'Compute on-line fluxes.
        Fc_irga = cov_Uz_co2
        LE_irga = LV*cov_Uz_h2o
        Hs = rho_a_mean*CP*cov_Uz_Ts

        tau = SQR ((cov_Uz_Ux*cov_Uz_Ux)+(cov_Uz_Uy*cov_Uz_Uy))
        u_star = SQR (tau)
        tau = rho_a_mean*tau


        'Convert dry air density to g/m^3.
        rho_d_mean = 1e3*rho_d_mean
        sigma_wpl = h2o_mean/rho_d_mean

        'Webb et al. term for water vapor Eq. (25).
        h2o_wpl_LE = 1.61*sigma_wpl*LE_irga
        h2o_wpl_H  = (1+(1.61*sigma_wpl))*h2o_mean/(t_hmp_mean+273.15)*LV*cov_Uz_Ts

        'Webb et al. term for carbon dioxide Eq. (24).
        co2_wpl_LE = 1.61*co2_mean/rho_d_mean*cov_Uz_h2o
        co2_wpl_H  = (1+(1.61*sigma_wpl))*co2_mean/(t_hmp_mean+273.15)*cov_Uz_Ts

        LE_wpl = LE_irga+h2o_wpl_LE+h2o_wpl_H
        Fc_wpl = (Fc_irga+co2_wpl_LE+co2_wpl_H)*(1000/44)

      EndIf

      CallTable flux


    Else
      scan_count = scan_count+1

    EndIf


  NextScan


  SlowSequence


  '''''''''''''''''''''''''''''''''''''''
  Scan (1,Min,3,0)


    'Turn on the AM416.
    PortSet (1,TRUE)

    'Clock the AM16/32A.

    PulsePort (2,0)
'    Delay(0,5,msec)
'    Delay(0,5,msec)
'    Delay(0,5,msec)
'    Delay(0,5,msec)
'    Delay(0,5,msec)
'    Delay(0,5,msec)
    VoltDiff (shf(1),1,mV20,8,True,450,250,shf_cal_1,0)

    'Clock the AM16/32A.

    PulsePort (2,0)
'    Delay(0,5,msec)
'    Delay(0,5,msec)
'    Delay(0,5,msec)
'    Delay(0,5,msec)
'    Delay(0,5,msec)
'    Delay(0,5,msec)
    VoltDiff (shf(2),1,mV20,8,True,450,250,shf_cal_2,0)

    'Clock the AM16/32A.

    PulsePort (2,)
  '  Delay(0,5,msec)
   ' Delay(0,5,msec)
    'Delay(0,5,msec)
    'Delay(0,5,msec)
    'Delay(0,5,msec)
    'Delay(0,5,msec)
    VoltDiff (shf(3),1,mV20,8,True,450,250,shf_cal_3,0)


    PulsePort (2,0)
    'Delay(0,5,msec)
    'Delay(0,5,msec)
    'Delay(0,5,msec)
    'Delay(0,5,msec)
    'Delay(0,5,msec)
    'Delay(0,5,msec)
    VoltDiff (shf(4),1,mV20,8,True,450,250,shf_cal_4,0)

    PulsePort (5,0)
    'Delay(0,5,msec)
    'Delay(0,5,msec)
    'Delay(0,5,msec)
    'Delay(0,5,msec)
    'Delay(0,5,msec)
    'Delay(0,5,msec)
   'NR-LITE Net Radiometer (no wind speed correction) measurement NR_Wm2:
    VoltDiff(NR_lite_Wm2,1,mV50,8,True,0,250,68.9655,0)
  


    PortSet (3,FALSE)


  NextScan
  '''''''''''''''''''''''''''''''''''''''''''
EndProg
